WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(SessionSettingsPath(Category=SessionSettings), RuleSettingsPath(Category=SessionSettings))
-> GroupWorkflow InitializeSettings
    BehaviorSubject<System.Collections.Generic.IDictionary(System.String,System.String)> TransitionLookup
    BehaviorSubject<RuleSchema.DelphiRule> RuleSettings

    ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
    -> LoadSessionSettings(Path=DelphiSession.yml)
    -> Take(Count=1) => #4
    -> AsyncSubject SessionSettings
    -> MemberSelector(Selector=LineMappings.OdorMap.Count)
    -> AsyncSubject MappingCount
    #4 -> Timestamp
    -> MemberSelector(Selector=Timestamp.UtcDateTime)
    -> Aeon.Acquisition.FormatDate
    -> AsyncSubject SessionTimestamp

    ExternalizedMapping(Path(DisplayName=RuleSettingsPath))
    -> RuleSelector(Path=rule2.rule.yml)
    -> MulticastSubject RuleSettings

    SubscribeSubject RuleSettings
    -> SelectMany GenerateTransitionDictionary
        WorkflowInput Source1

        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=StateDefinitions)
        -> Merge => #3
        SubscribeSubject RuleSettings
        -> MemberSelector(Selector=StateDefinitions.Count)
        -> PropertyMapping(Count) => #6
        #3, #6 -> Take(Count=4)
        -> ToDictionary(KeySelector=Name, ElementSelector=TransitionsTo)
        -> WorkflowOutput
    -> MulticastSubject TransitionLookup

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=LineMappings.OdorMap)
    -> Merge => #20
    SubscribeSubject MappingCount
    -> PropertyMapping(Count) => #22
    #20, #22 -> Take(Count=4)
    -> ToDictionary(KeySelector=Name, ElementSelector=Line)
    -> AsyncSubject LineMappings

ExternalizedMapping(StartStateMachineKey(Category=ControlKeys), PortName(DisplayName=OutputExpanderPortName, Category=HARP))
-> GroupWorkflow Devices
    ExternalizedMapping(PortName)
    -> GroupWorkflow DelphiController
        Unit
        -> Bonsai.Harp.SynchronizeTimestamp => #1
        Unit
        -> Bonsai.Harp.CreateMessage
          MessageType=Write
          Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
        -> DelaySubscription(DueTime=PT1S) => #4
        #1, #4 -> Concat
        -> BehaviorSubject Commands

        SubscribeSubject Commands => #7
        ExternalizedMapping(PortName) => #8
        #7, #8 -> Harp.OutputExpander.Device(OperationMode=Standby, OperationLed=On, DumpRegisters=false, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
        -> PublishSubject Events

        BehaviorSubject<DataSchema.LineCommand> LineCommands
        -> Condition CommandExists
            WorkflowInput Source1
            -> MemberSelector(Selector=LineName) => #1
            SubscribeSubject LineMappings => #2
            #1, #2 -> WithLatestFrom
            -> ContainsKey
            -> WorkflowOutput
        -> SelectMany LineActivation
            WorkflowInput Source1
            -> AsyncSubject Command

            SubscribeSubject LineMappings => #2
            SubscribeSubject Command => #3
            #2, #3 -> WithLatestFrom => #4
            -> MemberSelector(Selector=Item1) => #5
            #4 -> MemberSelector(Selector=Item2.LineName)
            -> PropertyMapping(Value) => #7
            #5, #7 -> Index(Operand=StringProperty(Value=OdorD))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
              Expression: Math.Pow(2, it)
            #4 -> MemberSelector(Selector=Item2) => #10
            #9, #10 -> Zip => #11
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.State)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out6)) => #14
            #11 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.State)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out9)) => #17
            #14, #17 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput

        BehaviorSubject<System.Boolean> CurrentPokeState

        SubscribeSubject Events
        -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.AuxInState) => #16
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=LineMappings.AuxLine)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(Math.Pow(2, it))
        -> PropertyMapping(Value) => #20
        #16, #20 -> HasFlag(Operand=WorkflowProperty<Harp.OutputExpander.AuxiliaryInputs>(Value=Aux1)) => #21
        -> Condition PokeOnset
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject PokeOnset
        -> BooleanProperty(Value=true)
        -> MulticastSubject CurrentPokeState
        #21 -> Condition PokeOffset
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> PublishSubject PokeOffset
        -> BooleanProperty(Value=false)
        -> MulticastSubject CurrentPokeState

        BehaviorSubject<System.Reactive.Unit> CloseAllLines
        -> SelectMany CloseAllLines
            WorkflowInput Source1

            SubscribeSubject LineMappings
            -> MemberSelector(Selector=Keys)
            -> Merge => #3
            SubscribeSubject LineMappings
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Count) => #6
            #3, #6 -> Take(Count=4)
            -> SelectMany CloseCommand
                WorkflowInput Source1
                -> PropertyMapping(LineName)
                -> DataSchema.LineCommand(LineName=OdorD, State=false)
                -> MulticastSubject LineCommands
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput

        BehaviorSubject<System.Boolean> PortValveCommand
        -> SelectMany PortValveActivation
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.PortLine)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt32(Math.Pow(2, it))
            WorkflowInput Source1 => #3
            #2, #3 -> Zip => #4
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out0)) => #7
            #4 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out0)) => #10
            #7, #10 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput

        BehaviorSubject<System.Boolean> VacuumValveCommand
        -> SelectMany VacuumValveActivation
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=LineMappings.VacuumLine)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt32(Math.Pow(2, it))
            WorkflowInput Source1 => #3
            #2, #3 -> Zip => #4
            -> Condition Open
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> InputMapping(OutputSet(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputSetPayload(OutputSet=Out2)) => #7
            #4 -> Condition Close
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> BitwiseNot
                -> WorkflowOutput
            -> InputMapping(OutputClear(Selector=Item1))
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreateOutputClearPayload(OutputClear=Out2)) => #10
            #7, #10 -> Merge
            -> Take(Count=1)
            -> MulticastSubject Commands
            -> WorkflowOutput

    ExternalizedMapping(StartStateMachineKey)
    -> GroupWorkflow StateController
        BehaviorSubject<System.String> CurrentState

        ExternalizedMapping(Filter(DisplayName=StartStateMachineKey))
        -> Bonsai.Windows.Input.KeyDown(Filter="Space Shift", SuppressRepetitions=false)
        -> StringProperty(Value=DefaultState)
        -> MulticastSubject BeginState

        BehaviorSubject<System.String> BeginState
        -> SelectMany SelectState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject StateName
            -> MulticastSubject CurrentState

            SubscribeSubject SubjectDictionary => #4
            SubscribeSubject StateName
            -> PropertyMapping(Value) => #6
            #4, #6 -> Index(Operand=StringProperty(Value=OdorA))
            -> Merge
            -> Take(Count=1)
            -> AsyncSubject StateComplete

            SubscribeSubject StateName => #11
            SubscribeSubject TransitionLookup => #12
            SubscribeSubject StateComplete => #13
            #12, #13 -> SubscribeWhen => #14
            SubscribeSubject StateName
            -> PropertyMapping(Key) => #16
            #14, #16 -> TryGetValueOrDefault(Key=OdorA, DefaultString=DefaultState) => #17
            #11, #17 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (it.Item1 as CurrentState, it.Item2 as TransitionState)
            -> Take(Count=1)
            -> WorkflowOutput
        -> MemberSelector(Selector=TransitionState)
        -> MulticastSubject BeginState

        GroupWorkflow StateDefinitions
            CreateObservable OdorA => #0
                Unit
                -> SelectMany ClosePortValve => #1
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject PortValveCommand
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.SwitchTime1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #5
                #1, #5 -> Delay(DueTime=PT0.01S)
                -> SelectMany CloseAllLines => #7
                    WorkflowInput Source1
                    -> Unit
                    -> MulticastSubject CloseAllLines
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.SwitchTime2)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #11
                #7, #11 -> Delay(DueTime=PT0.02S) => #12
                ExternalizedMapping(LineName) => #13
                #12, #13 -> SelectMany OpenActiveLine
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(LineName) => #1
                    #0, #1 -> SelectMany LineCommand
                        WorkflowInput Source1

                        ExternalizedMapping(LineName)
                        -> DataSchema.LineCommand(LineName=OdorA, State=true)
                        -> MulticastSubject LineCommands
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> SelectMany Vacuum => #15
                    SubscribeSubject SessionSettings => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> SubscribeWhen
                    -> MemberSelector(Selector=Metadata.UseVacuum) => #3
                    -> Condition VacuumOn
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany OpenVacuum => #5
                        WorkflowInput Source1 => #0
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.VacuumDelay)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #4
                        #0, #4 -> Delay(DueTime=PT0.005S)
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject VacuumValveCommand => #7
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.VacuumDuration)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #11
                        #7, #11 -> Delay(DueTime=PT0.05S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject VacuumValveCommand
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #3 -> Condition VacuumOff => #6
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    #5, #6 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.ChargeTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #19
                #15, #19 -> Delay(DueTime=PT0.2S)
                -> SelectMany SustainedPoke
                    WorkflowInput Source1

                    SubscribeSubject PokeOnset => #1
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.MinimumPokeTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #5
                    #1, #5 -> Delay(DueTime=PT0.1S) => #6
                    SubscribeSubject PokeOffset => #7
                    #6, #7 -> TakeUntil
                    -> Repeat
                    -> WorkflowOutput
                -> SelectMany OpenPortValve => #22
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject PortValveCommand
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.MinOdorDelivery)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #26
                #22, #26 -> Delay(DueTime=PT0.1S)
                -> SelectMany WaitForRelease
                    WorkflowInput Source1

                    SubscribeSubject PokeOffset => #1
                    SubscribeSubject CurrentPokeState
                    -> Condition AlreadyReleased => #3
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.MaxOdorDelivery)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT8S, Period=PT0S)
                    -> BooleanProperty(Value=true) => #9
                    #1, #3, #9 -> Merge
                    -> BooleanProperty(Value=true)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Take(Count=1)
                -> WorkflowOutput
            StringProperty(Value=OdorA) => #1
            #0, #1 -> Zip
            -> Take(Count=1) => #3
            CreateObservable OdorB => #4
                Unit
                -> SelectMany ClosePortValve => #1
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject PortValveCommand
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.SwitchTime1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #5
                #1, #5 -> Delay(DueTime=PT0.01S)
                -> SelectMany CloseAllLines => #7
                    WorkflowInput Source1
                    -> Unit
                    -> MulticastSubject CloseAllLines
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.SwitchTime2)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #11
                #7, #11 -> Delay(DueTime=PT0.02S) => #12
                ExternalizedMapping(LineName) => #13
                #12, #13 -> SelectMany OpenActiveLine
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(LineName) => #1
                    #0, #1 -> SelectMany LineCommand
                        WorkflowInput Source1

                        ExternalizedMapping(LineName)
                        -> DataSchema.LineCommand(LineName=OdorB, State=true)
                        -> MulticastSubject LineCommands
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> SelectMany Vacuum => #15
                    SubscribeSubject SessionSettings => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> SubscribeWhen
                    -> MemberSelector(Selector=Metadata.UseVacuum) => #3
                    -> Condition VacuumOn
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany OpenVacuum => #5
                        WorkflowInput Source1 => #0
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.VacuumDelay)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #4
                        #0, #4 -> Delay(DueTime=PT0.005S)
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject VacuumValveCommand => #7
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.VacuumDuration)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #11
                        #7, #11 -> Delay(DueTime=PT0.05S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject VacuumValveCommand
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #3 -> Condition VacuumOff => #6
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    #5, #6 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.ChargeTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #19
                #15, #19 -> Delay(DueTime=PT0.2S)
                -> SelectMany SustainedPoke
                    WorkflowInput Source1

                    SubscribeSubject PokeOnset => #1
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.MinimumPokeTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #5
                    #1, #5 -> Delay(DueTime=PT0.1S) => #6
                    SubscribeSubject PokeOffset => #7
                    #6, #7 -> TakeUntil
                    -> Repeat
                    -> WorkflowOutput
                -> SelectMany OpenPortValve => #22
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject PortValveCommand
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.MinOdorDelivery)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #26
                #22, #26 -> Delay(DueTime=PT0.1S)
                -> SelectMany WaitForRelease
                    WorkflowInput Source1

                    SubscribeSubject PokeOffset => #1
                    SubscribeSubject CurrentPokeState
                    -> Condition AlreadyReleased => #3
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.MaxOdorDelivery)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT8S, Period=PT0S)
                    -> BooleanProperty(Value=true) => #9
                    #1, #3, #9 -> Merge
                    -> BooleanProperty(Value=true)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Take(Count=1)
                -> WorkflowOutput
            StringProperty(Value=OdorB) => #5
            #4, #5 -> Zip
            -> Take(Count=1) => #7
            CreateObservable OdorC => #8
                Unit
                -> SelectMany ClosePortValve => #1
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject PortValveCommand
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.SwitchTime1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #5
                #1, #5 -> Delay(DueTime=PT0.01S)
                -> SelectMany CloseAllLines => #7
                    WorkflowInput Source1
                    -> Unit
                    -> MulticastSubject CloseAllLines
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.SwitchTime2)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #11
                #7, #11 -> Delay(DueTime=PT0.02S) => #12
                ExternalizedMapping(LineName) => #13
                #12, #13 -> SelectMany OpenActiveLine
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(LineName) => #1
                    #0, #1 -> SelectMany LineCommand
                        WorkflowInput Source1

                        ExternalizedMapping(LineName)
                        -> DataSchema.LineCommand(LineName=OdorC, State=true)
                        -> MulticastSubject LineCommands
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> SelectMany Vacuum => #15
                    SubscribeSubject SessionSettings => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> SubscribeWhen
                    -> MemberSelector(Selector=Metadata.UseVacuum) => #3
                    -> Condition VacuumOn
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> SelectMany OpenVacuum => #5
                        WorkflowInput Source1 => #0
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.VacuumDelay)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #4
                        #0, #4 -> Delay(DueTime=PT0.005S)
                        -> BooleanProperty(Value=true)
                        -> MulticastSubject VacuumValveCommand => #7
                        SubscribeSubject SessionSettings
                        -> MemberSelector(Selector=Metadata.VacuumDuration)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #11
                        #7, #11 -> Delay(DueTime=PT0.05S)
                        -> BooleanProperty(Value=false)
                        -> MulticastSubject VacuumValveCommand
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #3 -> Condition VacuumOff => #6
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    #5, #6 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.ChargeTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #19
                #15, #19 -> Delay(DueTime=PT0.2S)
                -> SelectMany SustainedPoke
                    WorkflowInput Source1

                    SubscribeSubject PokeOnset => #1
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.MinimumPokeTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #5
                    #1, #5 -> Delay(DueTime=PT0.1S) => #6
                    SubscribeSubject PokeOffset => #7
                    #6, #7 -> TakeUntil
                    -> Repeat
                    -> WorkflowOutput
                -> SelectMany OpenPortValve => #22
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject PortValveCommand
                    -> Take(Count=1)
                    -> WorkflowOutput
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.MinOdorDelivery)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #26
                #22, #26 -> Delay(DueTime=PT0.1S)
                -> SelectMany WaitForRelease
                    WorkflowInput Source1

                    SubscribeSubject PokeOffset => #1
                    SubscribeSubject CurrentPokeState
                    -> Condition AlreadyReleased => #3
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    SubscribeSubject SessionSettings
                    -> MemberSelector(Selector=Metadata.MaxOdorDelivery)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT8S, Period=PT0S)
                    -> BooleanProperty(Value=true) => #9
                    #1, #3, #9 -> Merge
                    -> BooleanProperty(Value=true)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BooleanProperty(Value=true)
                -> Take(Count=1)
                -> WorkflowOutput
            StringProperty(Value=OdorC) => #9
            #8, #9 -> Zip
            -> Take(Count=1) => #11
            CreateObservable DefaultState => #12
                BooleanProperty(Value=true)
                -> Take(Count=1)
                -> WorkflowOutput
            StringProperty(Value=DefaultState) => #13
            #12, #13 -> Zip
            -> Take(Count=1) => #15
            #3, #7, #11, #15 -> Merge
            -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
            -> AsyncSubject SubjectDictionary
            -> WorkflowOutput

    GroupWorkflow CameraController
        Disable GroupWorkflow SpinnakerCamera
            Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23492582, ColorProcessing=Default)
            -> MemberSelector(Selector=Image) => #1
            SubscribeSubject Events
            -> Harp.OutputExpander.FilterRegister(FilterType=Include, Register=Harp.OutputExpander.PwmRiseEvent) => #3
            #1, #3 -> WithLatestFrom
            -> PublishSubject CameraStream
            -> WorkflowOutput

        GroupWorkflow DebugCamera
            Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #0
            SubscribeSubject Events
            -> Harp.OutputExpander.FilterRegister(FilterType=Include, Register=Harp.OutputExpander.PwmRiseEvent) => #2
            #0, #2 -> WithLatestFrom
            -> PublishSubject CameraStream
            -> WorkflowOutput

        BehaviorSubject<System.Boolean> CameraStreamEnabled
        BehaviorSubject<System.Boolean> VideoWriting

        BooleanProperty(Value=false)
        -> MulticastSubject CameraStreamEnabled

        BooleanProperty(Value=false)
        -> MulticastSubject VideoWriting

        BehaviorSubject<DataSchema.CameraCommand> CameraCommands => #8
        -> Condition Stop
            WorkflowInput Source1
            -> MemberSelector(Selector=State)
            -> BitwiseNot
            -> WorkflowOutput
        -> GroupWorkflow StopStream
            WorkflowInput Source1
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmStopPayload(PwmStop=Pwm0))
            -> MulticastSubject Commands
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmAndStimDisablePayload(PwmAndStimDisable=Pwm0ToOut1))
            -> MulticastSubject Commands
            -> BooleanProperty(Value=false)
            -> MulticastSubject CameraStreamEnabled
            -> WorkflowOutput
        #8 -> Condition Start
            WorkflowInput Source1
            -> MemberSelector(Selector=State)
            -> WorkflowOutput
        -> GroupWorkflow StartStream
            WorkflowInput Source1 => #0
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=CameraProperties.ImagingRate)
            -> PropertyMapping(Frequency) => #3
            #0, #3 -> Harp.OutputExpander.ConfigurePwm(PwmChannels=Pwm0, Frequency=100, DutyCycle=50, PulseCount=0, TriggerSource=Software, EventConfig=Enabled)
            -> MulticastSubject Commands
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmAndStimEnablePayload(PwmAndStimEnable=Pwm0ToOut1))
            -> MulticastSubject Commands
            -> Harp.OutputExpander.CreateMessage(MessageType=Write, Payload=Harp.OutputExpander.CreatePwmStartPayload(PwmStart=Pwm0))
            -> MulticastSubject Commands
            -> BooleanProperty(Value=true)
            -> MulticastSubject CameraStreamEnabled
            -> WorkflowOutput

        SubscribeSubject CameraStream => #13
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.PreEventBufferFrames)
        -> PropertyMapping(Count) => #16
        #13, #16 -> BufferCount(Count=20, Skip=1)
        -> PublishSubject CameraBuffers

        SubscribeSubject PokeOnset
        -> SelectMany BufferWriteEnable
            WorkflowInput Source1

            SubscribeSubject CameraStreamEnabled => #1
            SubscribeSubject VideoWriting
            -> BitwiseNot => #3
            #1, #3 -> Zip
            -> BitwiseAnd
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany ExtractTriggeredBuffer
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject VideoWriting

            SubscribeSubject PokeOnset => #3
            SubscribeSubject PokeOffset => #4
            #3, #4 -> Merge => #5
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=CameraProperties.BufferInterval)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #9
            #5, #9 -> Throttle(DueTime=PT1S) => #10
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.MaxVideoLength)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT20S, Period=PT0S)
            -> BooleanProperty(Value=true) => #16
            #10, #16 -> Merge
            -> PublishSubject PokesComplete

            SubscribeSubject CameraBuffers
            -> Take(Count=1)
            -> AsyncSubject PreEventBuffer

            SubscribeSubject PreEventBuffer => #22
            SubscribeSubject CameraStream => #23
            SubscribeSubject PokesComplete => #24
            #23, #24 -> BufferTrigger(Count=nil)
            -> Take(Count=1) => #26
            SubscribeSubject CameraStream => #27
            SubscribeSubject PokesComplete => #28
            #27, #28 -> SubscribeWhen => #29
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=CameraProperties.PostEventBufferFrames)
            -> PropertyMapping(Count) => #32
            #29, #32 -> BufferCount(Count=20, Skip=nil)
            -> Take(Count=1) => #34
            #22, #26, #34 -> Zip
            -> AsyncSubject Buffer
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1.Count + it.Item2.Count + it.Item3.Count
            -> AsyncSubject

            SubscribeSubject CameraStream
            -> MemberSelector(Selector=Item2)
            -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedPwmRiseEvent)
            -> MemberSelector(Selector=Seconds)
            -> Take(Count=1)
            -> AsyncSubject HarpTime

            SubscribeSubject Buffer => #45
            -> SelectMany SaveVideo => #46
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.LoggingRootPath)
                -> AsyncSubject RootPath

                WorkflowInput Source1 => #3
                -> MemberSelector(Selector=Item1)
                -> Merge => #5
                #3 -> MemberSelector(Selector=Item2)
                -> Merge => #7
                #3 -> MemberSelector(Selector=Item3)
                -> Merge => #9
                #5, #7, #9 -> Merge
                -> MemberSelector(Selector=Item1) => #11
                SubscribeSubject RootPath => #12
                SubscribeSubject SessionTimestamp => #13
                SubscribeSubject HarpTime => #14
                #12, #13, #14 -> Zip
                -> Format(Format={0}\{1}\Event-{2}\Event-{2}.avi, Selector="Item1,Item2,Item3")
                -> PropertyMapping(FileName) => #17
                #11, #17 -> Bonsai.Vision.VideoWriter
                  FileName=C:\Users\erski\source\repos\zuckerman\Delphi\temp_data\\2024-02-19T21-57-27\Event-3791224694.4905\Event-3791224694.4905.avi
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FourCC=FMP4
                  FrameRate=30
                  FrameSize(Width=0, Height=0)
                  ResizeInterpolation=NearestNeighbor
                -> Take(Count=1)
                -> WorkflowOutput
            #45 -> SelectMany SaveTimestamps => #47
                SubscribeSubject SessionSettings
                -> MemberSelector(Selector=Metadata.LoggingRootPath)
                -> AsyncSubject RootPath

                WorkflowInput Source1 => #3
                -> MemberSelector(Selector=Item1)
                -> Merge => #5
                #3 -> MemberSelector(Selector=Item2)
                -> Merge => #7
                #3 -> MemberSelector(Selector=Item3)
                -> Merge => #9
                #5, #7, #9 -> Merge
                -> MemberSelector(Selector=Item2)
                -> Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedPwmRiseEvent)
                -> MemberSelector(Selector=Seconds) => #13
                SubscribeSubject RootPath => #14
                SubscribeSubject SessionTimestamp => #15
                SubscribeSubject HarpTime => #16
                #14, #15, #16 -> Zip
                -> Format(Format={0}\{1}\Event-{2}\FrameTimes.csv, Selector="Item1,Item2,Item3")
                -> PropertyMapping(FileName) => #19
                #13, #19 -> Bonsai.IO.CsvWriter
                  FileName=C:\Users\erski\source\repos\zuckerman\Delphi\temp_data\\2024-02-19T21-57-27\Event-3791224694.4905\FrameTimes.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=false
                -> TakeLast(Count=1)
                -> WorkflowOutput
            #46, #47 -> Zip
            -> BooleanProperty(Value=false)
            -> MulticastSubject VideoWriting
            -> Take(Count=1)
            -> WorkflowOutput

GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\Users\erski\source\repos\zuckerman\Delphi\temp_data\, ChunkSize=1)

    SubscribeSubject Events
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Expander, Heartbeats=Events, ClosingDuration=nil)

    SubscribeSubject SessionSettings => #6
    SubscribeSubject Events => #7
    #6, #7 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject RuleSettings => #12
    SubscribeSubject Events => #13
    #12, #13 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=RuleSettings)
    -> Take(Count=1)

IncludeWorkflow
  Path=Extensions\DelphiVisualizer.bonsai
  EventsInSubject=Events
  RuleSettingsSubject=RuleSettings
  CurrentStateSubject=CurrentState
  PokeOnsetSubject=PokeOnset
  EventsOutSubject=Commands

ExternalizedMapping(StopCameraStream, CloseAllLinesKey, OpenPortValveKey, ClosePortValveKey, PokeOnKey, PokeOffKey, StartCameraStream)
-> GroupWorkflow ControlKeys
    Timer(DueTime=PT0S, Period=PT0S)
    -> Unit => #1
    ExternalizedMapping(Filter(DisplayName=StartCameraStream, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> Unit => #4
    #1, #4 -> Merge
    -> SelectMany StartCameraStream => #6
        WorkflowInput Source1

        ExternalizedMapping(State)
        -> DataSchema.CameraCommand(State=true)
        -> WorkflowOutput
    ExternalizedMapping(Filter(DisplayName=StopCameraStream, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Alt", SuppressRepetitions=false)
    -> SelectMany StopCameraStream => #9
        WorkflowInput Source1

        ExternalizedMapping(State)
        -> DataSchema.CameraCommand(State=false)
        -> WorkflowOutput
    #6, #9 -> Merge
    -> MulticastSubject CameraCommands

    ExternalizedMapping(Filter(DisplayName=CloseAllLinesKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Alt", SuppressRepetitions=false)
    -> Unit
    -> MulticastSubject CloseAllLines

    ExternalizedMapping(Filter(DisplayName=OpenPortValveKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Shift", SuppressRepetitions=false)
    -> BooleanProperty(Value=true) => #18
    ExternalizedMapping(Filter(DisplayName=ClosePortValveKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="ShiftKey P Alt", SuppressRepetitions=false)
    -> BooleanProperty(Value=false) => #21
    #18, #21 -> Merge
    -> MulticastSubject PortValveCommand

    ExternalizedMapping(Filter(DisplayName=PokeOnKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Shift", SuppressRepetitions=true)
    -> BooleanProperty(Value=true)
    -> MulticastSubject PokeOnset

    ExternalizedMapping(Filter(DisplayName=PokeOffKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyUp(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock B D F P R T V Shift")
    -> BooleanProperty(Value=true)
    -> MulticastSubject PokeOffset

Timer(DueTime=PT0S, Period=PT1S)
-> Aeon.Acquisition.AvailableMemory

ExternalizedMapping(ExitTriggerKey)
-> GroupWorkflow ExitTrigger
    ExternalizedMapping(Filter(DisplayName=ExitTriggerKey, Category=ControlKeys))
    -> Bonsai.Windows.Input.KeyDown(Filter=Escape, SuppressRepetitions=false)
    -> Unit
    -> MulticastSubject CloseAllLines
    -> Take(Count=1)
    -> WorkflowOutput
-> WorkflowOutput
